PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1707, 960]
  color = -1.0000, -1.0000, -1.0000
  expName = P300_oddball
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Blank_Screen
    RoutineSettingsComponent Blank_Screen
      stopVal [duration (s)] = 2
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  Routine Cross
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    CodeComponent trigger_Cross
      Code Type = Auto->JS
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      Begin Routine:
        vec = []
        vec.append(10)
        outlet.push_sample(vec)
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $time_cross
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  Routine Start_Info
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    TextComponent text_8
      letterHeight = 0.05
      pos = [0,-0.05]
      startVal [time (s)] = 0.0
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      text:
        TASK:
        Mental Count the Green Targets

        Press UP to START
    TextComponent text
      letterHeight = 0.05
      pos = [0,0.15]
      startVal [time (s)] = 0.0
      text [set every repeat] = $start_screen_text
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    KeyboardComponent key_resp_4
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent trigger_startRUN
      Code Type = Auto->JS
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      Each Frame:
        if key_resp_4.keys == "up":
            outlet.push_sample([20])
  Routine End_Info
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_screen_text
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine End_Screen
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = END
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  Routine Start_Screen
    RoutineSettingsComponent Start_Screen
      stopVal [duration (s)] = 2
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  Routine Stimuli1
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    CodeComponent trigger_STIM
      Code Type = Auto->JS
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      Begin Routine:
        if  images1 == 'figures/1.png':
            outlet.push_sample([60])
        if  images1 == 'figures/2.png':
            outlet.push_sample([1])
        if  images1 == 'figures/3.png':
            outlet.push_sample([2])
        if  images1 == 'figures/4.png':
            outlet.push_sample([3])
    ImageComponent image
      image [set every repeat] = $images1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_stim
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  Routine Stimuli2
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    ImageComponent image_2
      image [set every repeat] = $images2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_stim
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    CodeComponent trigger_STIM_2
      Code Type = Auto->JS
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      Begin Routine:
        if  images2 == 'figures/5.png':
            outlet.push_sample([60])
        if  images2 == 'figures/6.png':
            outlet.push_sample([4])
        if  images2 == 'figures/7.png':
            outlet.push_sample([5])
        if  images2 == 'figures/8.png':
            outlet.push_sample([6])
  Routine Stimuli3
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    ImageComponent image_3
      image [set every repeat] = $images3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_stim
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    CodeComponent trigger_STIM_3
      Code Type = Auto->JS
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      Begin Routine:
        if  images3 == 'figures/9.png':
            outlet.push_sample([60])
        if  images3 == 'figures/10.png':
            outlet.push_sample([7])
        if  images3 == 'figures/11.png':
            outlet.push_sample([8])
        if  images3 == 'figures/12.png':
            outlet.push_sample([9])
  Routine User_Report_Screen2
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_12
      letterHeight = 0.05
      pos = [0,0.15]
      startVal [time (s)] = 0.0
      text [set every repeat] = Number of Targets Counted?
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    TextComponent text_7
      letterHeight = 0.05
      pos = [-0.35,-0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $user_report_screen_text21
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    TextComponent text_13
      letterHeight = 0.05
      pos = [0.35,-0.1]
      startVal [time (s)] = 0.0
      text = (Press RIGHT)
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    TextComponent text_14
      letterHeight = 0.05
      pos = [-0.35,-0.1]
      startVal [time (s)] = 0.0
      text = (Press LEFT)
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    TextComponent text_15
      letterHeight = 0.05
      pos = [0.35,-0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $user_report_screen_text22
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    CodeComponent trigger_RESP_2
      Code Type = Auto->JS
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      Each Frame:
        if key_resp_3.keys == "left":
            outlet.push_sample([21])
        if key_resp_3.keys == "right":
            outlet.push_sample([22])
  Routine User_Report_Screen1
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    TextComponent text_3
      letterHeight = 0.05
      pos = [0,0.15]
      startVal [time (s)] = 0.0
      text [set every repeat] = Number of Targets Counted?
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    TextComponent text_4
      letterHeight = 0.05
      pos = [-0.35,-0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $user_report_screen_text11
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    TextComponent text_9
      letterHeight = 0.05
      pos = [0.35,-0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $user_report_screen_text12
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    TextComponent text_10
      letterHeight = 0.05
      pos = [-0.35,-0.1]
      startVal [time (s)] = 0.0
      text = (Press LEFT)
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    TextComponent text_11
      letterHeight = 0.05
      pos = [0.35,-0.1]
      startVal [time (s)] = 0.0
      text = (Press RIGHT)
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent trigger_RESP
      Code Type = Auto->JS
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      Each Frame:
        if key_resp.keys == "left":
            outlet.push_sample([21])
            print([11])
        if key_resp.keys == "right":
            outlet.push_sample([22])
            print([12])
  Routine User_Report_Screen3
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_16
      letterHeight = 0.05
      pos = [0,0.15]
      startVal [time (s)] = 0.0
      text [set every repeat] = Number of Targets Counted?
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    TextComponent text_17
      letterHeight = 0.05
      pos = [-0.35,-0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $user_report_screen_text31
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    TextComponent text_18
      letterHeight = 0.05
      pos = [0.35,-0.1]
      startVal [time (s)] = 0.0
      text = (Press RIGHT)
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    TextComponent text_19
      letterHeight = 0.05
      pos = [-0.35,-0.1]
      startVal [time (s)] = 0.0
      text = (Press LEFT)
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    TextComponent text_20
      letterHeight = 0.05
      pos = [0.35,-0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $user_report_screen_text32
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    CodeComponent trigger_RESP_3
      Code Type = Auto->JS
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      Each Frame:
        if key_resp_2.keys == "left":
            outlet.push_sample([21])
        if key_resp_2.keys == "right":
            outlet.push_sample([22])
  Routine LSL
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    CodeComponent Load_LSL
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet # import required classes

        info = StreamInfo(name='Trigger',type='Markers', channel_count=1,
        channel_format='int32', source_id='myuniquesourceid23443') # sets variables for object info

        outlet = StreamOutlet(info) # initialise stream.
  Routine Wait_Screen
    RoutineSettingsComponent Wait_Screen
      stopVal [duration (s)] = 90
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Flow
  Routine LSL
  Routine Start_Screen
  LoopInitiator run_1 loopType="TrialHandler"
    conditionsFile = run1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'time_cross': 1, 'time_stim': 1, 'start_screen_text': 'PART 1/4', 'user_report_screen_text11': 7, 'user_report_screen_text12': 8, 'freq_target1': 8},
      {'time_cross': 1, 'time_stim': 0.9, 'start_screen_text': 'PART 2/4', 'user_report_screen_text11': 9, 'user_report_screen_text12': 8, 'freq_target1': 9},
      {'time_cross': 0.9, 'time_stim': 0.8, 'start_screen_text': 'PART 3/4', 'user_report_screen_text11': 11, 'user_report_screen_text12': 10, 'freq_target1': 10},
      {'time_cross': 0.8, 'time_stim': 0.8, 'start_screen_text': 'PART 4/4', 'user_report_screen_text11': 10, 'user_report_screen_text12': 11, 'freq_target1': 11}]
    Routine Start_Info
    Routine Blank_Screen
    LoopInitiator trials_1 loopType="TrialHandler"
      conditionsFile = trial.xlsx
      loopType = random
      nReps = freq_target1
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      conditions:
        [{'images1': 'figures/1.png', 'images2': 'figures/5.png', 'images3': 'figures/9.png'},
        {'images1': 'figures/2.png', 'images2': 'figures/6.png', 'images3': 'figures/10.png'},
        {'images1': 'figures/3.png', 'images2': 'figures/7.png', 'images3': 'figures/11.png'},
        {'images1': 'figures/4.png', 'images2': 'figures/8.png', 'images3': 'figures/12.png'}]
      Routine Cross
      Routine Stimuli1
    LoopTerminator trials_1
    Routine Blank_Screen
    Routine User_Report_Screen1
    Routine Blank_Screen
  LoopTerminator run_1
  Routine Wait_Screen
  LoopInitiator run_2 loopType="TrialHandler"
    conditionsFile = run2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'time_cross': 1, 'time_stim': 1, 'start_screen_text': 'PART 1/4', 'user_report_screen_text21': 8, 'user_report_screen_text22': 9, 'freq_target2': 8},
      {'time_cross': 1, 'time_stim': 0.9, 'start_screen_text': 'PART 2/4', 'user_report_screen_text21': 10, 'user_report_screen_text22': 9, 'freq_target2': 9},
      {'time_cross': 0.9, 'time_stim': 0.8, 'start_screen_text': 'PART 3/4', 'user_report_screen_text21': 12, 'user_report_screen_text22': 11, 'freq_target2': 11},
      {'time_cross': 0.8, 'time_stim': 0.8, 'start_screen_text': 'PART 4/4', 'user_report_screen_text21': 12, 'user_report_screen_text22': 13, 'freq_target2': 12}]
    Routine Start_Info
    Routine Blank_Screen
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = trial.xlsx
      loopType = random
      nReps = freq_target2
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      conditions:
        [{'images1': 'figures/1.png', 'images2': 'figures/5.png', 'images3': 'figures/9.png'},
        {'images1': 'figures/2.png', 'images2': 'figures/6.png', 'images3': 'figures/10.png'},
        {'images1': 'figures/3.png', 'images2': 'figures/7.png', 'images3': 'figures/11.png'},
        {'images1': 'figures/4.png', 'images2': 'figures/8.png', 'images3': 'figures/12.png'}]
      Routine Cross
      Routine Stimuli2
    LoopTerminator trials_2
    Routine Blank_Screen
    Routine User_Report_Screen2
    Routine Blank_Screen
  LoopTerminator run_2
  Routine Wait_Screen
  LoopInitiator run_3 loopType="TrialHandler"
    conditionsFile = run3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'time_cross': 1, 'time_stim': 1, 'start_screen_text': 'PART 1/4', 'user_report_screen_text31': 8, 'user_report_screen_text32': 7, 'freq_target3': 7},
      {'time_cross': 1, 'time_stim': 0.9, 'start_screen_text': 'PART 2/4', 'user_report_screen_text31': 10, 'user_report_screen_text32': 9, 'freq_target3': 9},
      {'time_cross': 0.9, 'time_stim': 0.8, 'start_screen_text': 'PART 3/4', 'user_report_screen_text31': 10, 'user_report_screen_text32': 11, 'freq_target3': 11},
      {'time_cross': 0.8, 'time_stim': 0.8, 'start_screen_text': 'PART 4/4', 'user_report_screen_text31': 11, 'user_report_screen_text32': 12, 'freq_target3': 12}]
    Routine Start_Info
    Routine Blank_Screen
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trial.xlsx
      loopType = random
      nReps = freq_target3
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      conditions:
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      Routine Cross
      Routine Stimuli3
    LoopTerminator trials
    Routine Blank_Screen
    Routine User_Report_Screen3
    Routine Blank_Screen
  LoopTerminator run_3
  Routine Blank_Screen
  Routine Wait_Screen
  Routine End_Screen
